PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Solo_Project
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine short
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent short_list
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $short_words
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  Routine long
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    PolygonComponent fixation_2
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent long_list
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $long_word
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  Routine recall1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        Recall as many words as you remember and type them below.

        After typing every word, remember to click enter before typing the next word.

        Once you type them, click on the SUBMIT button to finish your trial.
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 8.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 8.0
      text = SUBMIT
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    MouseComponent mouse
      clickable = $text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 8.0
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  Routine recall2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text:
        Recall as many words as you remember and type them below.

        After typing every word, remember to click enter before typing the next word.

        Once you type them, click on the SUBMIT button to finish your trial.
    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 8.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 8.0
      text = SUBMIT
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    MouseComponent mouse_2
      clickable = $text_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 8.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = short_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('short_words', 'cat')]),
      OrderedDict([('short_words', 'bus')]),
      OrderedDict([('short_words', 'sun')]),
      OrderedDict([('short_words', 'egg')]),
      OrderedDict([('short_words', 'air')])]
    Routine short
  LoopTerminator trials
  Routine recall1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = long_list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'long_word': 'crocodile'},
      {'long_word': 'jewelery'},
      {'long_word': 'mountain'},
      {'long_word': 'notebook'},
      {'long_word': 'umbrella'}]
    Routine long
  LoopTerminator trials_2
  Routine recall2
