PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Task5_WordPriming
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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      text [set every repeat]:
        $study_words
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine testing
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_words', 'book')]),
      OrderedDict([('study_words', 'cushion')]),
      OrderedDict([('study_words', 'phone')]),
      OrderedDict([('study_words', 'marble')]),
      OrderedDict([('study_words', 'board')]),
      OrderedDict([('study_words', 'laptop')]),
      OrderedDict([('study_words', 'chart')]),
      OrderedDict([('study_words', 't-shirt')]),
      OrderedDict([('study_words', 'mouse')]),
      OrderedDict([('study_words', 'pastry')]),
      OrderedDict([('study_words', 'case')]),
      OrderedDict([('study_words', 'cruise')]),
      OrderedDict([('study_words', 'police')]),
      OrderedDict([('study_words', 'keys')]),
      OrderedDict([('study_words', 'poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test', 'l_pt_p'), ('References', 'laptop'), ('old_new', 'old')]),
      OrderedDict([('test', '_ha_t'), ('References', 'chart'), ('old_new', 'old')]),
      OrderedDict([('test', 't_hi_t'), ('References', 'tshirt'), ('old_new', 'old')]),
      OrderedDict([('test', '_ou_e'), ('References', 'mouse'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_s_r_'), ('References', 'pastry'), ('old_new', 'old')]),
      OrderedDict([('test', 'c_s_'), ('References', 'case'), ('old_new', 'old')]),
      OrderedDict([('test', '_r_is_'), ('References', 'cruise'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_li_e'), ('References', 'police'), ('old_new', 'old')]),
      OrderedDict([('test', 'k_y_'), ('References', 'keys'), ('old_new', 'old')]),
      OrderedDict([('test', 'p_st_r'), ('References', 'poster'), ('old_new', 'old')]),
      OrderedDict([('test', '_o_rd'), ('References', 'board'), ('old_new', 'old')]),
      OrderedDict([('test', '_a_bl_'), ('References', 'marble'), ('old_new', 'old')]),
      OrderedDict([('test', '_ho_e'), ('References', 'phone'), ('old_new', 'old')]),
      OrderedDict([('test', '_oo_'), ('References', 'book'), ('old_new', 'old')]),
      OrderedDict([('test', 'c_s_io_'), ('References', 'cushion'), ('old_new', 'old')]),
      OrderedDict([('test', 'ta_l_'), ('References', 'table'), ('old_new', 'new')]),
      OrderedDict([('test', 'p_nc_l'), ('References', 'pencil'), ('old_new', 'new')]),
      OrderedDict([('test', 'v_s_'), ('References', 'vase'), ('old_new', 'new')]),
      OrderedDict([('test', 'bo_t_e'), ('References', 'bottle'), ('old_new', 'new')])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
    Routine testing
  LoopTerminator trials_2
