PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Task6_IntentionalBinding
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent polygon
      fillColor = green
      lineColor = green
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 7.0
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    KeyboardComponent key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 7.0
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  Routine Beep_Sound
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    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine Responses
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Report the delay between the key press and beep sound (0-1000) in ms
        Click Submit after entering the value.
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.3, 0.1)
      startVal [time (s)] = 0
      text = Submit
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = random
    nReps = 33
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    conditions:
      [OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.1), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.4), ('freq', 1000), ('condition', 'unexp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.4), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.7), ('freq', 400), ('condition', 'exp')]),
      OrderedDict([('delay', 0.1), ('freq', 400), ('condition', 'exp')])]
    Routine trial
    Routine Beep_Sound
    Routine Responses
  LoopTerminator trials
